PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = white
  expName = Headline_Task_7_13
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Routines
  Routine Phase_1
    CodeComponent P1_code
      Code Type = Auto->JS
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      Begin Experiment:
        import random #for random.choice function

        P1_i = 0

        #Image Files
        P1_Path = "Phase_1"
        P1_File = ".PNG"

        # List of Practice Posts
        P1_Trials_List = ["\POST_FN_AMISH", "\POST_FN_FLUORIDE", "\POST_FN_GREECE", "\POST_FN_MARIJUANA", "\POST_FN_MONSANTO", "\POST_FR_BRAIN", "\POST_FR_CARBON", "\POST_FR_FLU", "\POST_FR_ICE", "\POST_FR_IMMUNE", "\POST_FU_GENE", "\POST_FU_KIDS", "\POST_FU_OBESITY", "\POST_FU_POX", "\POST_FU_TIGER", "\POST_RN_BLOOD", "\POST_RN_DIY", "\POST_RN_EMBRYO", "\POST_RN_GMO", "\POST_RN_HAIR", "\POST_RN_HIV", "\POST_RN_HONEYBEE", "\POST_RN_MARKET", "\POST_RN_MARS", "\POST_RN_MOSQUITO", "\POST_RN_NEANDERTHAL", "\POST_RN_POLLUTION", "\POST_RN_PROBIOTIC", "\POST_RN_RABBIT", "\POST_RN_UNEMPLOYMENT"]

        ##TO DO: Re-write with correct file path and names of imgs
      Begin Routine:
        #Initialization
        allowedKeys = ('space', 'l', 's')
        event.clearEvents('keyboard')

        #randomizing headlines
        P1_Trials_List = random.sample(["\POST_FN_AMISH", "\POST_FN_FLUORIDE", "\POST_FN_GREECE", "\POST_FN_MARIJUANA", "\POST_FN_MONSANTO", "\POST_FR_BRAIN", "\POST_FR_CARBON", "\POST_FR_FLU", "\POST_FR_ICE", "\POST_FR_IMMUNE", "\POST_FU_GENE", "\POST_FU_KIDS", "\POST_FU_OBESITY", "\POST_FU_POX", "\POST_FU_TIGER", "\POST_RN_BLOOD", "\POST_RN_DIY", "\POST_RN_EMBRYO", "\POST_RN_GMO", "\POST_RN_HAIR", "\POST_RN_HIV", "\POST_RN_HONEYBEE", "\POST_RN_MARKET", "\POST_RN_MARS", "\POST_RN_MOSQUITO", "\POST_RN_NEANDERTHAL", "\POST_RN_POLLUTION", "\POST_RN_PROBIOTIC", "\POST_RN_RABBIT", "\POST_RN_UNEMPLOYMENT"], 1)
        P1_Trials = P1_Path + P1_Trials_List[0] + P1_File

        Slider_Scale = "Slider\Slide1.JPG"
        Slider = 0
        Liked_Img = "Like_Share\LIKED_TEMPLATE.PNG"
        Liked = 0
        Shared_Img = "Like_Share\SHARED_TEMPLATE.PNG"
        Shared = 0

        #Numbers
        Bold_One = "Numbers\Slide10.JPG"
        BoldOne = 0
        Bold_Two = "Numbers\Slide11.JPG"
        BoldTwo = 0
        Bold_Three = "Numbers\Slide12.JPG"
        BoldThree = 0
        Bold_Four = "Numbers\Slide13.JPG"
        BoldFour = 0
      Each Frame:
        # keys
        keys = event.getKeys(allowedKeys)

        if len(keys):
            if keys[0].lower() == 'l':
                Liked = 1
                continueRoutine = True
            elif keys[0].lower() == 's':
                Shared = 1
                continueRoutine = True
            elif keys[0].lower() == 'space':
                Slider = 1
                allowedKeys = ['1','2','3','4']
                event.clearEvents('keyboard')
                continueRoutine = True
        if len(keys) and Slider == 1: #if the slider is on the screen they are only allowed to enter a number before they hit enter
            if keys[0] == r'1':
                BoldOne = 1
                BoldTwo = 0
                BoldThree = 0
                BoldFour = 0
                allowedKeys = ['1','2','3','4','return']
                continueRoutine = True
            elif keys[0] == r'2':
                BoldOne = 0
                BoldTwo = 1
                BoldThree = 0
                BoldFour = 0
                allowedKeys = ['1','2','3','4','return']
                continueRoutine = True
            elif keys[0] == r'3':
                BoldOne = 0
                BoldTwo = 0
                BoldThree = 1
                BoldFour = 0
                allowedKeys = ['1','2','3','4','return']
                continueRoutine = True
            elif keys[0] == r'4':
                BoldOne = 0
                BoldTwo = 0
                BoldThree = 0
                BoldFour = 1
                allowedKeys = ['1','2','3','4','return']
                continueRoutine = True
            elif 'return' in keys:
                continueRoutine = False
      End Routine:
        P1_i = P1_i + 1
    ImageComponent P1_Headlines
      image [set every frame] = $P1_Trials
      pos = (0, 0.1)
      size = (1.5, 1)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent P1_Like
      image [set every frame] = $Liked_Img
      opacity [set every frame] = Liked
      pos = (-0.23, -0.125)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent P1_Share
      image [set every frame] = $Shared_Img
      opacity [set every frame] = Shared
      pos = (0.21, -0.124)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent P1_Slider
      image [set every frame] = $Slider_Scale
      mask = none
      opacity [set every frame] = Slider
      pos = (0, -0.35)
      size = (0.95, 0.23)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent P1_1
      image [set every frame] = $Bold_One
      opacity [set every frame] = BoldOne
      pos = (-0.305, -0.41)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent P1_2
      image [set every frame] = $Bold_Two
      opacity [set every frame] = BoldTwo
      pos = (-0.1, -0.41)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent P1_3
      image [set every frame] = $Bold_Three
      opacity [set every frame] = BoldThree
      pos = (0.1, -0.41)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent P1_4
      image [set every frame] = $Bold_Four
      opacity [set every frame] = BoldFour
      pos = (0.3, -0.41)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      units = height
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  Routine Instructions
    CodeComponent Instructions_Code
      Code Type = Auto->JS
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      Begin Experiment:
        Inst_index = 0

        #Image Files
        Inst_Path = "Practice_Instructions"
        Inst_File = ".JPG"

        # List of Instructions
        Inst_Text_List = [r"\Slide2", r"\Slide3", r"\Slide4", r"\Slide5"]
      Begin Routine:
        Img = Inst_Text_List[Inst_index]
        Inst_Text = Inst_Path + Img + Inst_File
      End Routine:
        Inst_index = Inst_index + 1
    KeyboardComponent Inst_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent Inst_Image
      image [set every repeat] = $Inst_Text
      size = (1.5, 1)
      startVal [time (s)] = 0.0
      units = height
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  Routine Prac_Trials
    CodeComponent Prac_Code
      Code Type = Auto->JS
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      Begin Experiment:
        Prac_index = 0

        #Image Files
        Prac_Path = "Practice_Trial_Posts"
        Prac_File = ".PNG"

        # List of Practice Posts
        Prac_Trials_List = ["\PRAC_CAT", "\PRAC_DOG", "\PRAC_GAS"]
      Begin Routine:
        #Initialization
        allowedKeys = ('space', 'l', 's')
        event.clearEvents('keyboard')

        Prac_Img = Prac_Trials_List[Prac_index]
        Prac_Trials = Prac_Path + Prac_Img + Prac_File

        Slider_Scale = "Slider\Slide1.JPG"
        Slider = 0
        Liked_Img = "Like_Share\LIKED_TEMPLATE.PNG"
        Liked = 0
        Shared_Img = "Like_Share\SHARED_TEMPLATE.PNG"
        Shared = 0

        #Numbers
        Bold_One = "Numbers\Slide10.JPG"
        BoldOne = 0
        Bold_Two = "Numbers\Slide11.JPG"
        BoldTwo = 0
        Bold_Three = "Numbers\Slide12.JPG"
        BoldThree = 0
        Bold_Four = "Numbers\Slide13.JPG"
        BoldFour = 0
      Each Frame:
        # keys
        keys = event.getKeys(allowedKeys)

        if len(keys):
            if keys[0].lower() == 'l':
                Liked = 1
                continueRoutine = True
            elif keys[0].lower() == 's':
                Shared = 1
                continueRoutine = True
            elif keys[0].lower() == 'space':
                Slider = 1
                allowedKeys = ['1','2','3','4']
                event.clearEvents('keyboard')
                continueRoutine = True
        if len(keys) and Slider == 1: #if the slider is on the screen they are only allowed to enter a number before they hit enter
            if keys[0] == r'1':
                BoldOne = 1
                BoldTwo = 0
                BoldThree = 0
                BoldFour = 0
                allowedKeys = ['1','2','3','4','return']
                continueRoutine = True
            elif keys[0] == r'2':
                BoldOne = 0
                BoldTwo = 1
                BoldThree = 0
                BoldFour = 0
                allowedKeys = ['1','2','3','4','return']
                continueRoutine = True
            elif keys[0] == r'3':
                BoldOne = 0
                BoldTwo = 0
                BoldThree = 1
                BoldFour = 0
                allowedKeys = ['1','2','3','4','return']
                continueRoutine = True
            elif keys[0] == r'4':
                BoldOne = 0
                BoldTwo = 0
                BoldThree = 0
                BoldFour = 1
                allowedKeys = ['1','2','3','4','return']
                continueRoutine = True
            elif 'return' in keys:
                continueRoutine = False
      End Routine:
        Prac_index = Prac_index + 1
    ImageComponent Prac_Images
      image [set every frame] = $Prac_Trials
      pos = (0, 0.1)
      size = (1.5, 1)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent Prac_Like
      image [set every frame] = $Liked_Img
      opacity [set every frame] = Liked
      pos = (-0.23, -0.125)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent Prac_Shared
      image [set every frame] = $Shared_Img
      opacity [set every frame] = Shared
      pos = (0.21, -0.124)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent Prac_Slider
      image [set every frame] = $Slider_Scale
      opacity [set every frame] = Slider
      pos = (0, -0.35)
      size = (0.95, 0.23)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent Prac_1
      image [set every frame] = $Bold_One
      opacity [set every frame] = BoldOne
      pos = (-0.305, -0.41)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent Prac_2
      image [set every frame] = $Bold_Two
      opacity [set every frame] = BoldTwo
      pos = (-0.1, -0.41)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent Prac_3
      image [set every frame] = $Bold_Three
      opacity [set every frame] = BoldThree
      pos = (0.1, -0.41)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent Prac_4
      image [set every frame] = $Bold_Four
      opacity [set every frame] = BoldFour
      pos = (0.3, -0.41)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      units = height
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  Routine Phase_2
    CodeComponent P2_code
      Code Type = Auto->JS
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      Begin Experiment:
        import random #for random.choice function

        P2_i = 0

        #Image Files
        P2_Path = "Facebook_Posts"
        P2_File = ".PNG"

        # List of Practice Posts
        P2_Trials_List = ["\POST_FN_AMISH", "\POST_FN_FAKED",
        "\POST_FN_FEARS", "\POST_FN_FISH", "\POST_FN_FLUORIDE",
        "\POST_FN_GREECE", "\POST_FN_MARIJUANA", "\POST_FN_MONSANTO",
        "\POST_FN_STERILE", "\POST_FR_BRAIN", "\POST_FR_CARBON",
        "\POST_FR_DOW", "\POST_FR_FLU", "\POST_FR_ICE",
        "\POST_FR_IMMUNE", "\POST_FR_LESION", "\POST_FR_VEGAN",
        "\POST_FR_WOMEN", "\POST_FU_GENE", "\POST_FU_KIDS",
        "\POST_FU_MEAT", "\POST_FU_NEUTRAL", "\POST_FU_OBESITY",
        "\POST_FU_PHARMA", "\POST_FU_POX", "\POST_FU_TIGER",
        "\POST_FU_TURMERIC", "\POST_RN_AMOEBA", "\POST_RN_BACON",
        "\POST_RN_BLOB", "\POST_RN_BLOOD", "\POST_RN_DIY",
        "\POST_RN_EMBRYO", "\POST_RN_EUROPE", "\POST_RN_FIRES",
        "\POST_RN_GMO", "\POST_RN_HAIR", "\POST_RN_HIV",
        "\POST_RN_HOLES", "\POST_RN_HONEYBEE", "\POST_RN_MARKET",
        "\POST_RN_MARS", "\POST_RN_MOSQUITO", "\POST_RN_NEANDERTHAL",
        "\POST_RN_NUCLEAR", "\POST_RN_OZONE", "\POST_RN_POLLUTION",
        "\POST_RN_PROBIOTIC", "\POST_RN_RABBIT", "\POST_RN_RATS",
        "\POST_RN_SMELL", "\POST_RN_UNEMPLOYMENT", "\POST_RN_WALLABIES",
        "\POST_RN_WEIGHT"]
      Begin Routine:
        #Initialization
        allowedKeys = ('space', 'l', 's')
        event.clearEvents('keyboard')

        #randomizing headlines
        P2_Trials_List = random.sample(["\POST_FN_AMISH", "\POST_FN_FAKED",
        "\POST_FN_FEARS", "\POST_FN_FISH", "\POST_FN_FLUORIDE",
        "\POST_FN_GREECE", "\POST_FN_MARIJUANA", "\POST_FN_MONSANTO",
        "\POST_FN_STERILE", "\POST_FR_BRAIN", "\POST_FR_CARBON",
        "\POST_FR_DOW", "\POST_FR_FLU", "\POST_FR_ICE",
        "\POST_FR_IMMUNE", "\POST_FR_LESION", "\POST_FR_VEGAN",
        "\POST_FR_WOMEN", "\POST_FU_GENE", "\POST_FU_KIDS",
        "\POST_FU_MEAT", "\POST_FU_NEUTRAL", "\POST_FU_OBESITY",
        "\POST_FU_PHARMA", "\POST_FU_POX", "\POST_FU_TIGER",
        "\POST_FU_TURMERIC", "\POST_RN_AMOEBA", "\POST_RN_BACON",
        "\POST_RN_BLOB", "\POST_RN_BLOOD", "\POST_RN_DIY",
        "\POST_RN_EMBRYO", "\POST_RN_EUROPE", "\POST_RN_FIRES",
        "\POST_RN_GMO", "\POST_RN_HAIR", "\POST_RN_HIV",
        "\POST_RN_HOLES", "\POST_RN_HONEYBEE", "\POST_RN_MARKET",
        "\POST_RN_MARS", "\POST_RN_MOSQUITO", "\POST_RN_NEANDERTHAL",
        "\POST_RN_NUCLEAR", "\POST_RN_OZONE", "\POST_RN_POLLUTION",
        "\POST_RN_PROBIOTIC", "\POST_RN_RABBIT", "\POST_RN_RATS",
        "\POST_RN_SMELL", "\POST_RN_UNEMPLOYMENT", "\POST_RN_WALLABIES",
        "\POST_RN_WEIGHT"], 1)
        P2_Trials = P2_Path + P2_Trials_List[0] + P2_File

        Slider_Scale = "Slider\Slide1.JPG"
        Slider = 0
        Liked_Img = "Like_Share\LIKED_TEMPLATE.PNG"
        Liked = 0
        Shared_Img = "Like_Share\SHARED_TEMPLATE.PNG"
        Shared = 0

        #Numbers
        Bold_One = "Numbers\Slide10.JPG"
        BoldOne = 0
        Bold_Two = "Numbers\Slide11.JPG"
        BoldTwo = 0
        Bold_Three = "Numbers\Slide12.JPG"
        BoldThree = 0
        Bold_Four = "Numbers\Slide13.JPG"
        BoldFour = 0
      Each Frame:
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      End Routine:
        P2_i = P2_i + 1
    ImageComponent P2_Headlines
      image [set every frame] = $P1_Trials
      pos = (0, 0.1)
      size = (1.5, 1)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent P2_Like
      image [set every frame] = $Liked_Img
      opacity [set every frame] = Liked
      pos = (-0.23, -0.125)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent P2_Share
      image [set every frame] = $Shared_Img
      opacity [set every frame] = Shared
      pos = (0.21, -0.124)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent P2_Slider
      image [set every frame] = $Slider_Scale
      opacity [set every frame] = Slider
      pos = (0, -0.35)
      size = (0.95, 0.23)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent P2_1
      image [set every frame] = $Bold_One
      opacity [set every frame] = BoldOne
      pos = (-0.305, -0.41)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent P2_2
      image [set every frame] = $Bold_Two
      opacity [set every frame] = BoldTwo
      pos = (-0.1, -0.41)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent P2_3
      image [set every frame] = $Bold_Three
      opacity [set every frame] = BoldThree
      pos = (0.1, -0.41)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent P2_4
      image [set every frame] = $Bold_Four
      opacity [set every frame] = BoldFour
      pos = (0.3, -0.41)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      units = height
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  Routine Good_Job
    CodeComponent Good_Code
      Code Type = Auto->JS
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      Begin Experiment:
        Good_index = 0

        #Image Files
        Good_Path = "Great_Job"
        Good_File = ".JPG"

        # List of Instructions
        Good_Text_List = ["\Begin"]
      Begin Routine:
        Img = Good_Text_List[Good_index]
        Good_Text = Good_Path + Img + Good_File
      End Routine:
        Good_index = Good_index + 1
    KeyboardComponent Good_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent Good_image
      image [set every repeat] = $Good_Text
      size = (1.5, 1)
      startVal [time (s)] = 0.0
      units = height
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Flow
  LoopInitiator Inst_Loop loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine Instructions
  LoopTerminator Inst_Loop
  LoopInitiator Prac_Loop loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine Prac_Trials
  LoopTerminator Prac_Loop
  LoopInitiator Good_Loop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Good_Job
  LoopTerminator Good_Loop
  LoopInitiator P1_Loop loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine Phase_1
  LoopTerminator P1_Loop
  LoopInitiator P2_Loop loopType="TrialHandler"
    loopType = random
    nReps = 54
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    Routine Phase_2
  LoopTerminator P2_Loop
